PsychoPy2experiment version="2026.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1024,768]
  color = $(-1.0000, -1.0000, -1.0000)
  expName = stroop_task
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine instrucciones
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    ImageComponent instrucciones_image
      image = media/instructions/1_instrucciones.png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine inicio_practica
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    ImageComponent inicio_practica_image
      image = media/instructions/2_inicio_practica.png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practica
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    PolygonComponent fix_cross_practice
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent palabra_practica_txt
      color [set every repeat] = $color_tinta_p
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $palabra_p
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    KeyboardComponent key_resp_practice
      allowedKeys = 'a','s','k','l'
      correctAns = $tecla_correcta_p
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine feedback_practica
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        mensaje_feedback = ""
        if key_resp_practice.corr == 1:
            mensaje_feedback = "¡Correcto!"
        else:
            mensaje_feedback = "Incorrecto"
    TextComponent feedback_text
      letterHeight = 0.1
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $mensaje_feedback
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  Routine fin_practica
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    ImageComponent fin_practica_image
      image = media/instructions/3_fin_practica.png
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine descanso
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    ImageComponent descanso_image
      image = media/instructions/4_descanso.png
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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  Routine inicio_experimental
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    ImageComponent inicio_experimental_image
      image = media/instructions/5_inicio_experimental.png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine experimental
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    PolygonComponent fix_cross_experimental
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent palabra_experimental_text
      color [set every repeat] = $color_tinta
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $palabra
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    KeyboardComponent key_resp_4
      allowedKeys = 'a','s','k','l'
      correctAns = $tecla_correcta
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine ITI
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    TextComponent ITI_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine fin_experimento
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    ImageComponent fin_experimento_image
      image = media/instructions/6_fin_experimento.png
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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Flow
  Routine instrucciones
  Routine inicio_practica
  LoopInitiator loop_practica_stroop loopType="TrialHandler"
    conditionsFile = conditions/condiciones_practica_stroop.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'id_p': 1, 'palabra_p': 'ROJO', 'color_tinta_p': 'red', 'condicion_p': 'congruente', 'tecla_correcta_p': 'a'},
      {'id_p': 2, 'palabra_p': 'ROJO', 'color_tinta_p': 'green', 'condicion_p': 'incongruente', 'tecla_correcta_p': 's'},
      {'id_p': 3, 'palabra_p': 'VERDE', 'color_tinta_p': 'green', 'condicion_p': 'congruente', 'tecla_correcta_p': 's'},
      {'id_p': 4, 'palabra_p': 'VERDE', 'color_tinta_p': 'yellow', 'condicion_p': 'incongruente', 'tecla_correcta_p': 'k'},
      {'id_p': 5, 'palabra_p': 'AMARILLO', 'color_tinta_p': 'yellow', 'condicion_p': 'congruente', 'tecla_correcta_p': 'k'},
      {'id_p': 6, 'palabra_p': 'AMARILLO', 'color_tinta_p': 'blue', 'condicion_p': 'incongruente', 'tecla_correcta_p': 'l'},
      {'id_p': 7, 'palabra_p': 'AZUL', 'color_tinta_p': 'blue', 'condicion_p': 'congruente', 'tecla_correcta_p': 'l'},
      {'id_p': 8, 'palabra_p': 'AZUL', 'color_tinta_p': 'red', 'condicion_p': 'incongruente', 'tecla_correcta_p': 'a'}]
    Routine practica
    Routine feedback_practica
  LoopTerminator loop_practica_stroop
  Routine fin_practica
  Routine descanso
  Routine inicio_experimental
  LoopInitiator loop_experimental_stroop loopType="TrialHandler"
    conditionsFile = conditions/condiciones_experimental_stroop.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'id': 1, 'palabra': 'ROJO', 'color_tinta': 'red', 'condicion': 'congruente', 'tecla_correcta': 'a'},
      {'id': 2, 'palabra': 'ROJO', 'color_tinta': 'red', 'condicion': 'congruente', 'tecla_correcta': 'a'},
      {'id': 3, 'palabra': 'ROJO', 'color_tinta': 'red', 'condicion': 'congruente', 'tecla_correcta': 'a'},
      {'id': 4, 'palabra': 'ROJO', 'color_tinta': 'red', 'condicion': 'congruente', 'tecla_correcta': 'a'},
      {'id': 5, 'palabra': 'ROJO', 'color_tinta': 'red', 'condicion': 'congruente', 'tecla_correcta': 'a'},
      {'id': 6, 'palabra': 'ROJO', 'color_tinta': 'red', 'condicion': 'congruente', 'tecla_correcta': 'a'},
      {'id': 7, 'palabra': 'ROJO', 'color_tinta': 'green', 'condicion': 'incongruente', 'tecla_correcta': 's'},
      {'id': 8, 'palabra': 'ROJO', 'color_tinta': 'green', 'condicion': 'incongruente', 'tecla_correcta': 's'},
      {'id': 9, 'palabra': 'ROJO', 'color_tinta': 'yellow', 'condicion': 'incongruente', 'tecla_correcta': 'k'},
      {'id': 10, 'palabra': 'ROJO', 'color_tinta': 'yellow', 'condicion': 'incongruente', 'tecla_correcta': 'k'},
      {'id': 11, 'palabra': 'ROJO', 'color_tinta': 'blue', 'condicion': 'incongruente', 'tecla_correcta': 'l'},
      {'id': 12, 'palabra': 'ROJO', 'color_tinta': 'blue', 'condicion': 'incongruente', 'tecla_correcta': 'l'},
      {'id': 13, 'palabra': 'VERDE', 'color_tinta': 'green', 'condicion': 'congruente', 'tecla_correcta': 's'},
      {'id': 14, 'palabra': 'VERDE', 'color_tinta': 'green', 'condicion': 'congruente', 'tecla_correcta': 's'}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
    Routine experimental
    Routine ITI
  LoopTerminator loop_experimental_stroop
  Routine fin_experimento
